PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = desk_monitor
  Screen = 2
  Units = deg
  Window size (pixels) = [1920, 1080]
  expName = mental_rotation_bootcamp
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent my_code
      Code Type = Py
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      Begin Experiment:
        # How many seconds a trial should last?
        trial_time = 6

        # What letters would you like to present?
        possible_letters = ["A", "B", "R", "K"]
      Begin Routine:
        # Select what letter to run during the current trial
        current_idx = np.random.choice(range(len(possible_letters)))
        current_letter = possible_letters[current_idx]
    TextComponent target
      letterHeight = 3
      ori [set every repeat] = target_angle
      pos = (-15, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = trial_time
      text [set every repeat] = $current_letter
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    TextComponent letter
      flip [set every repeat] = $flip
      letterHeight = 3
      ori [set every repeat] = letter_angle
      pos = (15, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = trial_time
      text [set every repeat] = $current_letter
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    KeyboardComponent part_response
      allowedKeys = 'a', 'l'
      correctAns = $expected_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = trial_time
      storeCorrect = True
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    PolygonComponent fixation_cross
      fillColor = red
      lineColor = red
      shape = cross
      size = (1.5, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = trial_time
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  Routine instructions
    TextComponent intro_slides
      letterHeight = 1.5
      startVal [time (s)] = 0.0
      text [set every repeat] = $intro_text
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    KeyboardComponent change_slide
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator loop_intro loopType="TrialHandler"
    conditionsFile = conditions/intro_slides.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('intro_text', 'Welcome to this experiment and thank you for deciding to participate!')]),
      OrderedDict([('intro_text', 'In this study you will see two letters presented one on the left and the other on the right side of the screen. Your job is to decide whether they are the same letters or not')]),
      OrderedDict([('intro_text', 'To do this you need to mentally rotate the letter on the left to try to match the one on the right. Sometimes the letters are a mirrored version of each other and they cannot be matched with a simple rotation')]),
      OrderedDict([('intro_text', 'If the letters match (are the same) press the A key. If they do not match (mirrored) press the L key.')])]
    Routine instructions
  LoopTerminator loop_intro
  LoopInitiator loop_trials loopType="TrialHandler"
    conditionsFile = conditions/mental_rotation_conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('condition', 'same'), ('target_angle', 0), ('letter_angle', 0), ('flip', 0.0)]),
      OrderedDict([('condition', 'same'), ('target_angle', 60), ('letter_angle', 0), ('flip', 0.0)]),
      OrderedDict([('condition', 'same'), ('target_angle', 120), ('letter_angle', 0), ('flip', 0.0)]),
      OrderedDict([('condition', 'same'), ('target_angle', 180), ('letter_angle', 0), ('flip', 0.0)]),
      OrderedDict([('condition', 'same'), ('target_angle', 240), ('letter_angle', 0), ('flip', 0.0)]),
      OrderedDict([('condition', 'same'), ('target_angle', 0), ('letter_angle', 60), ('flip', 0.0)]),
      OrderedDict([('condition', 'same'), ('target_angle', 60), ('letter_angle', 60), ('flip', 0.0)]),
      OrderedDict([('condition', 'same'), ('target_angle', 120), ('letter_angle', 60), ('flip', 0.0)]),
      OrderedDict([('condition', 'same'), ('target_angle', 180), ('letter_angle', 60), ('flip', 0.0)]),
      OrderedDict([('condition', 'same'), ('target_angle', 240), ('letter_angle', 60), ('flip', 0.0)]),
      OrderedDict([('condition', 'same'), ('target_angle', 0), ('letter_angle', 120), ('flip', 0.0)]),
      OrderedDict([('condition', 'same'), ('target_angle', 60), ('letter_angle', 120), ('flip', 0.0)]),
      OrderedDict([('condition', 'same'), ('target_angle', 120), ('letter_angle', 120), ('flip', 0.0)]),
      OrderedDict([('condition', 'same'), ('target_angle', 180), ('letter_angle', 120), ('flip', 0.0)]),
      OrderedDict([('condition', 'same'), ('target_angle', 240), ('letter_angle', 120), ('flip', 0.0)])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
    Routine trial
  LoopTerminator loop_trials
